PsychoPy2experiment version="2024.1.4"
Settings
  Audio latency priority = 1
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['Participant ID'], expName, expInfo['date'])
  Experiment info = {'Expert ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = -1.0000, -1.0000, -1.0000
  expName = experiment1
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine Welcome
    RoutineSettingsComponent Welcome
      saveStartStop = False
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    TextComponent textWelcome
      color = 0.9608, 0.8431, 0.6863
      letterHeight = 0.045
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome back, expert!

        For this survey, you are kindly reminded that you need to wear headphones. Please, make sure that you have adjusted the sound to a comfortable level before you begin.
    ButtonComponent buttonContinue_Welcome
      anchor = bottom-center
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.9608, 0.8431, 0.6863
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.45)
      save = none
      saveStartStop = False
      size = (0.2, 0.06)
      startVal [time (s)] = 1
      text = Continue
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    MouseComponent mouseWelcome
      clickable = buttonContinue_Welcome
      forceEndRoutineOnPress = correct click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine Instructions
    RoutineSettingsComponent Instructions
      saveStartStop = False
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    TextComponent textInstructions
      color = 0.9608, 0.8431, 0.6863
      letterHeight = 0.045
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.65
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      text:
        In this session, you will be presented with 200 30-second song excerpts and ashed to decide how much they represent:
        psytrance
        minimal techno
        progressive house
        dubstep

        The session consists of 10 blocks of 20 songs, with free breaks in between.

        When the song starts playing, use your mouse to move the dot on the slider according to your judgment. Then, click the continue button to listen to the next song.

        Please, make judgments based on your knowledge about these subgenres and not your personal preferences on EDM.
    ButtonComponent buttonContinue_Instructions
      anchor = bottom-center
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.9608, 0.8431, 0.6863
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.46)
      save = none
      saveStartStop = False
      size = (0.2, 0.06)
      startVal [time (s)] = 1
      text = Continue
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    MouseComponent mouseInstructions
      clickable = buttonContinue_Instructions
      forceEndRoutineOnPress = correct click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine Goodbye
    RoutineSettingsComponent Goodbye
      saveStartStop = False
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    TextComponent textGoodbye
      color = 0.9608, 0.8431, 0.6863
      letterHeight = 0.045
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Thank you for your time and help!

        Click the button to exit.
    ButtonComponent buttonExit
      anchor = bottom-center
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.9608, 0.8431, 0.6863
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.45)
      save = none
      saveStartStop = False
      size = (0.2, 0.06)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = Exit
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    MouseComponent mouseGoodbye
      clickable = buttonExit
      forceEndRoutineOnPress = correct click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      timeRelativeTo = routine
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  Routine Trial
    RoutineSettingsComponent Trial
      saveStartStop = False
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    CodeComponent codeMusicJS
      Code Type = Both
      Begin JS Routine:
        // create and play the music
        sndMusic = new sound.Sound({
              win: psychoJS.window,
              value: 'A',
              secs: (- 1),
              });
        sndMusic.setVolume(1.0);

        sndMusic.setValue(audioFile);
        sndMusic.setVolume(1.0);
        sndMusic.play(-1);
      Begin Routine:
        # NOTE: python and JS are NOT linked in this code block
        #       any changes made to one side will not affect the other

        # define the undefined parameter in python
        undefined = None

        # create and play the music
        sndMusic = sound.Sound(
            'A',
            secs=-1,
            stereo=True,
            hamming=True,
            speaker='sndMusic',    name='sndMusic'
        )
        sndMusic.setVolume(1.0)

        sndMusic.setSound(audioFile, hamming=True)
        sndMusic.setVolume(1.0, log=False)
        sndMusic.seek(0)
        sndMusic.play(-1)
      End JS Routine:
        // stop the music
        sndMusic.stop();
      End Routine:
        # stop the music
        sndMusic.pause()
    CodeComponent codeTrial
      Code Type = Auto->JS
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      Begin Routine:
        sliderMoved = False
        continueClicked = False

        # setup the trial message
        trial_msg = "How representative is this song of\n" + str(genre) + "?"
      Each Frame:
        # Check if the slider has been moved
        if slider.getRating() != undefined:
            sliderMoved = True

        # Check if the continue button is clicked and the slider has been moved
        if mouseTrial.isPressedIn(buttonContinue_Trial) and sliderMoved:
            continueClicked = True
            continueRoutine = False
      End Routine:
        skip_break = True # assume no break

        # every 20 trials activate a break
        if trials.thisN % 20 == 19 and trials.thisN != 0 and trials.thisN != 199:
            skip_break = False
            print("Break time! Showing break screen.")
    TextComponent textTrial
      color = 0.9608, 0.8431, 0.6863
      letterHeight = 0.05
      pos = (0, 0.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_msg
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    SliderComponent slider
      borderColor = 0.9608, 0.8431, 0.6863
      color = 0.9608, 0.8431, 0.6863
      fillColor = 0.9608, 0.8431, 0.6863
      forceEndRoutine = False
      granularity = 1
      initVal = 0
      labels = ['0', '100']
      letterHeight = 0.04
      pos = (0, -0.25)
      saveStartStop = False
      size = (1.0, 0.08)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,100)
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    ImageComponent imageTrial
      image = headphones.png
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    SoundComponent soundTrial
      disabled = True
      saveStartStop = False
      sound [set every repeat] = $audioFile
      speakerIndex = 8.0
      startVal [time (s)] = 0.0
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    ButtonComponent buttonContinue_Trial
      anchor = bottom-center
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.9608, 0.8431, 0.6863
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0, -0.45)
      save = none
      saveStartStop = False
      size = (0.2, 0.06)
      startVal [time (s)] = 0
      text = Continue
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    MouseComponent mouseTrial
      clickable = buttonContinue_Trial
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine Break
    RoutineSettingsComponent Break
      skipIf = skip_break
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    ImageComponent imageBreak
      image = coffee.png
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent textBreak
      color = 0.9608, 0.8431, 0.6863
      letterHeight = 0.045
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Break!
        Take the time you need and click on the button to continue when you are ready.
    ButtonComponent buttonContinue_Break
      anchor = bottom-center
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.9608, 0.8431, 0.6863
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.45)
      save = last click
      size = (0.2, 0.06)
      startVal [time (s)] = 1
      text = Continue
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    MouseComponent mouseBreak
      clickable = buttonContinue_Break
      forceEndRoutineOnPress = correct click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine blackScreen
    RoutineSettingsComponent blackScreen
      saveStartStop = False
      stopVal [duration (s)] = 0.7
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    CodeComponent codeInterTrial
      Code Type = Auto->JS
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      Begin Routine:
        inter_trial_msg = "Song "+str(trials.thisN+1)+"/200"
    TextComponent textIntertrial
      color = 0.9608, 0.8431, 0.6863
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
      text [set every repeat] = $inter_trial_msg
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  Routine blackScreen2
    RoutineSettingsComponent blackScreen2
      saveStartStop = False
      skipIf = skip_break
      stopVal [duration (s)] = 0.7
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Flow
  Routine Welcome
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = audio_files_session2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('audioFile', 'ogg/dark minimal techno_136_pcm.ogg'), ('genre', 'minimal techno')]),
      OrderedDict([('audioFile', 'ogg/dark minimal techno_163_pcm.ogg'), ('genre', 'minimal techno')]),
      OrderedDict([('audioFile', 'ogg/dark minimal techno_174_pcm.ogg'), ('genre', 'minimal techno')]),
      OrderedDict([('audioFile', 'ogg/dark minimal techno_177_pcm.ogg'), ('genre', 'minimal techno')]),
      OrderedDict([('audioFile', 'ogg/dark minimal techno_179_pcm.ogg'), ('genre', 'minimal techno')]),
      OrderedDict([('audioFile', 'ogg/dark minimal techno_185_pcm.ogg'), ('genre', 'minimal techno')]),
      OrderedDict([('audioFile', 'ogg/dark minimal techno_218_pcm.ogg'), ('genre', 'minimal techno')]),
      OrderedDict([('audioFile', 'ogg/dark minimal techno_246_pcm.ogg'), ('genre', 'minimal techno')]),
      OrderedDict([('audioFile', 'ogg/dark minimal techno_249_pcm.ogg'), ('genre', 'minimal techno')]),
      OrderedDict([('audioFile', 'ogg/dark minimal techno_252_pcm.ogg'), ('genre', 'minimal techno')]),
      OrderedDict([('audioFile', 'ogg/dark minimal techno_261_pcm.ogg'), ('genre', 'minimal techno')]),
      OrderedDict([('audioFile', 'ogg/dark minimal techno_279_pcm.ogg'), ('genre', 'minimal techno')]),
      OrderedDict([('audioFile', 'ogg/dark minimal techno_289_pcm.ogg'), ('genre', 'minimal techno')]),
      OrderedDict([('audioFile', 'ogg/dark minimal techno_294_pcm.ogg'), ('genre', 'minimal techno')]),
      OrderedDict([('audioFile', 'ogg/dark minimal techno_300_pcm.ogg'), ('genre', 'minimal techno')])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
    Routine blackScreen
    Routine Trial
    Routine blackScreen2
    Routine Break
  LoopTerminator trials
  Routine Goodbye
